PsychoPy2experiment version="2021.1.2"
Settings
  Data filename = u'data/%s_%s_%s' % (expInfo['name'], expName, expInfo['date'])
  Experiment info = {'name': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = pix
  Window size (pixels) = [1440, 900]
  color = white
  expName = Delboeuf
  logging level = debug
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Routines
  Routine trial
    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        circle_sizes = [85, 95, 105, 115]
        circle_size = 0

        results_120 = []
        results_140 = []
        results_160 = []
        results_180 = []
        results_200 = []

        trial_num = 1
      Begin Routine:
        circle_size = circle_sizes[randint(0, 3)]

        trial_counter = '%s из %s' %(trial_num, trials.nTotal)
      Each Frame:
        if event.getKeys(['left']):
            circle_size -= 1
        if event.getKeys(['right']):
            circle_size += 1
        if event.getKeys(['q']):
            trials.finished = True
            continueRoutine = False
      End Routine:
        trials.addData('circle_size', circle_size)

        if ring_size == 120:
            results_120.append(circle_size - 100)
        elif ring_size == 140:
            results_140.append(circle_size - 100)
        elif ring_size == 160:
            results_160.append(circle_size - 100)
        elif ring_size == 180:
            results_180.append(circle_size - 100)
        elif ring_size == 200:
            results_200.append(circle_size - 100)

        trial_num += 1
    PolygonComponent ring
      fillColor = white
      lineColor = black
      lineWidth = 10
      nVertices = 99
      pos = (-200, 0)
      saveStartStop = False
      shape = regular polygon...
      size [set every repeat] = $(ring_size, ring_size)
      startVal [time (s)] = 0.0
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    PolygonComponent reference
      fillColor = black
      lineWidth = 0
      nVertices = 99
      pos = (200, 0)
      saveStartStop = False
      shape = regular polygon...
      size = (100, 100)
      startVal [time (s)] = 0.0
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    PolygonComponent circle
      fillColor = black
      lineWidth = 0
      nVertices = 99
      pos = (-200, 0)
      saveStartStop = False
      shape = regular polygon...
      size [set every frame] = $(circle_size, circle_size)
      startVal [time (s)] = 0.0
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    KeyboardComponent stop_trial
      allowedKeys = 'return'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.5
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    TextComponent trial_counter_text
      color = black
      letterHeight = 20
      pos = (-400, 400)
      startVal [time (s)] = 0.0
      text [set every repeat] = $trial_counter
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  Routine instr
    TextComponent text_instr
      color = black
      letterHeight = 30
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 900
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      text:
        На экране вам будут показаны два черных круга. Круг справа — эталонный, его нужно использоваь как образец. Круг слева, окруженный кольцом, будет реагировать на ваши действия. Ваша задача — изменить размер круга слева так, чтобы он казался равен кругу справа.

        Для изменения размера круга пользуйтесь клавишами со стрелками:

        уменьшить <--- ---> увеличить

        Когда круги будут выглядеть одинаковыми, нажмите «enter», чтобы перейти к следующей пробе.

        Нажмите «enter», чтобы начать эксперимент.
    KeyboardComponent start_exp
      allowedKeys = "return"
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine feedback
    CodeComponent code_feedback
      Code Type = Py
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      Begin Experiment:
        results = ''

        mean_120 = 0
        mean_140 = 0
        mean_160 = 0
        mean_180 = 0
        mean_200 = 0
      Begin Routine:
        mean_120 = round(np.mean(results_120), 2)
        mean_140 = round(np.mean(results_140), 2)
        mean_160 = round(np.mean(results_160), 2)
        mean_180 = round(np.mean(results_180), 2)
        mean_200 = round(np.mean(results_200), 2)

        results = 'Средняя величина ошибки:\n\n120px : %s\n140px : %s\n160px : %s\n180px : %s\n200px : %s' %(mean_120, mean_140, mean_160, mean_180, mean_200)
    TextComponent text_feedback
      color = black
      letterHeight = 30
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $results
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    TextComponent finish_instr
      color = black
      letterHeight = 25
      pos = (0, -300)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Нажмите «enter», чтобы завершить эксперимент.
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    KeyboardComponent stop_exp
      allowedKeys = 'return'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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Flow
  Routine instr
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = stim.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'ring_size': 120},
      {'ring_size': 140},
      {'ring_size': 160},
      {'ring_size': 180},
      {'ring_size': 200}]
    Routine trial
  LoopTerminator trials
  Routine feedback
