PsychoPy2experiment version="2021.2.0"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1280, 720]
  expName = Stroop
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Routines
  Routine trial
    TextComponent trial_text
      color [set every repeat] = $color
      letterHeight = 0.1
      startVal [time (s)] = 0.3
      text [set every repeat] = $word
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    KeyboardComponent response
      allowedKeys = 'g', 'r', 'b', 'y'
      correctAns = $corr_ans
      forceEndRoutine = True
      startVal [time (s)] = 0.3
      storeCorrect = True
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    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Experiment:
        feedback_value = ''
      End Routine:
        if response.corr == 1:
            feedback_value = 'правильно'
        else:
            feedback_value = 'ошибка'
  Routine instruction
    TextComponent instruction_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Не читайте сами слова. Ваша задача — определить цвет слова.

        Нажимайте:
        r (red), если буквы красные
        g (green), если буквы зеленые
        b (blue), если буквы синие
        y (yellow), если буквы желтые

        Нажмите enter для начала эксперимента.
    KeyboardComponent instr_key
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine fix
    TextComponent fix_text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text [set every repeat] = +
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  Routine feedback
    TextComponent feedback_text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $feedback_value
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  Routine thanks
    TextComponent thanks_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = Спасибо за участие в эксперименте!
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Flow
  Routine instruction
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = stimuli_with_bags (1).xlsx
    isTrials = False
    loopType = random
    nReps = 1
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    conditions:
      [{'word': 'red', 'color': 'red', 'corr_ans': 'r'},
      {'word': 'red', 'color': 'green', 'corr_ans': 'g'},
      {'word': 'red', 'color': 'blue', 'corr_ans': 'b'},
      {'word': 'green', 'color': 'green', 'corr_ans': 'g'},
      {'word': 'green', 'color': 'blue', 'corr_ans': 'b'},
      {'word': 'green', 'color': 'yellow', 'corr_ans': 'y'},
      {'word': 'blue', 'color': 'blue', 'corr_ans': 'b'},
      {'word': 'blue', 'color': 'yellow', 'corr_ans': 'y'},
      {'word': 'blue', 'color': 'red', 'corr_ans': 'r'},
      {'word': 'yellow', 'color': 'yellow', 'corr_ans': 'y'},
      {'word': 'yellow', 'color': 'red', 'corr_ans': 'r'},
      {'word': 'yellow', 'color': 'green', 'corr_ans': 'g'}]
    Routine fix
    Routine trial
    Routine feedback
  LoopTerminator trials
  Routine thanks
