PsychoPy2experiment version="2021.2.0"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = sproottest
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Routines
  Routine Instruction
    TextComponent Instruction_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Инструкция

        Если слово написано красным - нажмите стрелку "влево"
        Если слово написано синим - нажмите стрелку "вниз"
        Если слово написано зелёным- нажмите стрелку "вправо"

        Для начала эксперимента нажмите"пробел"
    KeyboardComponent inst_answer
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine exp
    TextComponent stroop_test
      color [set every repeat] = $color
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10.0
      text [set every repeat] = $word
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    KeyboardComponent sproot_ans
      allowedKeys =  'left','right','space'
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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Flow
  Routine Instruction
  LoopInitiator stroop_loop2 loopType="TrialHandler"
    conditionsFile = stepik.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'word': 'красный', 'color': 'red', 'corrAns': 'left'},
      {'word': 'красный', 'color': 'blue', 'corrAns': 'down'},
      {'word': 'красный', 'color': 'green', 'corrAns': 'right'},
      {'word': 'синий', 'color': 'red', 'corrAns': 'left'},
      {'word': 'синий', 'color': 'blue', 'corrAns': 'down'},
      {'word': 'синий', 'color': 'green', 'corrAns': 'right'},
      {'word': 'зелёный', 'color': 'red', 'corrAns': 'left'},
      {'word': 'зелёный', 'color': 'blue', 'corrAns': 'down'},
      {'word': 'зелёный', 'color': 'green', 'corrAns': 'right'}]
    Routine exp
  LoopTerminator stroop_loop2
